PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = runA
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent name
      text [set every repeat] = $target
      stopVal [duration (s)] = 2.0
      pos = [0, .2]
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent trait
      text [set every repeat] = $word
      stopVal [duration (s)] = 2
      pos = [0, -.2]
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent stim_crosshair
      text [set every repeat] = $fix_sign
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent poststim_fix
      text = +
      startVal [time (s)] = 2
      letterHeight = 0.2
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    KeyboardComponent trigger
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '5','6'
      startVal [time (s)] = 0
      store = first key
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    KeyboardComponent response
      forceEndRoutine = False
      allowedKeys = '1','2','3','4'
      startVal [time (s)] = 0.0
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  Routine wait_for_trig
    TextComponent wait_crosshair
      color = $[0.004,0.004,0.004]
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent start_trigger
      forceEndRoutine = True
      allowedKeys = '5'
      startVal [time (s)] = 0.0
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Flow
  Routine wait_for_trig
  LoopInitiator loop_trials loopType="TrialHandler"
    conditionsFile = runA.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'valence': u'neg', 'word': u'temperamental', 'target': u'LAURA', 'fix_sign': u'-'},
      {'valence': u'ITI', 'word': u' ', 'target': u'ITI', 'fix_sign': u'+'},
      {'valence': u'ITI', 'word': u' ', 'target': u'ITI', 'fix_sign': u'+'},
      {'valence': u'neg', 'word': u'temperamental', 'target': u'ZACH', 'fix_sign': u'-'},
      {'valence': u'neg', 'word': u'agreeable', 'target': u'JAKE', 'fix_sign': u'-'},
      {'valence': u'neg', 'word': u'patient', 'target': u'ASHLEY', 'fix_sign': u'-'},
      {'valence': u'neg', 'word': u'absent-minded', 'target': u'SELF', 'fix_sign': u'-'},
      {'valence': u'ITI', 'word': u' ', 'target': u'ITI', 'fix_sign': u'+'},
      {'valence': u'neg', 'word': u'clumsy', 'target': u'NANCY', 'fix_sign': u'-'},
      {'valence': u'ITI', 'word': u' ', 'target': u'ITI', 'fix_sign': u'+'},
      {'valence': u'pos', 'word': u'confident', 'target': u'NANCY', 'fix_sign': u'-'},
      {'valence': u'pos', 'word': u'adventurous', 'target': u'JAKE', 'fix_sign': u'-'},
      {'valence': u'neg', 'word': u'neurotic', 'target': u'ELISE', 'fix_sign': u'-'},
      {'valence': u'pos', 'word': u'idealistic', 'target': u'NANCY', 'fix_sign': u'-'},
      {'valence': u'ITI', 'word': u' ', 'target': u'ITI', 'fix_sign': u'+'},
      {'valence': u'ITI', 'word': u' ', 'target': u'ITI', 'fix_sign': u'+'},
      {'valence': u'neg', 'word': u'pessimistic', 'target': u'NANCY', 'fix_sign': u'-'},
      {'valence': u'neg', 'word': u'clumsy', 'target': u'ASHLEY', 'fix_sign': u'-'},
      {'valence': u'ITI', 'word': u' ', 'target': u'ITI', 'fix_sign': u'+'}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
    Routine trial
  LoopTerminator loop_trials
